PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = sess_1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine polygan_self
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    KeyboardComponent key_resp_pol_self_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine confirmation
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    CodeComponent confirmation_code
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        import math


        # Define the mean and standard deviation
        #mean_A = 64
        #std_dev_A = 13
        # Generate rewards for A1 and A2 from N(64, 13)
        #reward_A1 = math.ceil(random.gauss(mean_A, std_dev_A))
        #reward_A2 = math.ceil(random.gauss(mean_A, std_dev_A))
        #a_choice_option = random.choice(["ま", "う"] )
        # degree
        #reward_a = {"ま":reward_A1, "う":reward_A2}
        text_a = visual.TextStim(win=win, name='text_left',
            text=a_choice_option,
            font='Arial',
            pos=(-0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        text_reward_a = visual.TextStim(win=win, name='text_right',
            text=reward_a[a_choice_option],
            font='Arial',
            pos=(-0.1, -0.1), height=0.04, wrapWidth=None, ori=0.0,
            color=[0,0,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        # Define the mean and standard deviation
        #mean_B = 54
        #std_dev_B = 13
        # Generate rewards for B from N(54, 13)
        reward_B = math.ceil(reward_B)

        # Define the mean and standard deviation
        #mean_C = 44
        #std_dev_C = 13
        # Generate rewards for C from N(44, 13)
        reward_C = math.ceil(reward_C)

        reward_bc = {"の":reward_B, "あ": reward_C}
        # degree
        b, c = "の", "あ"
        bc = [b,c]

        text_bc = visual.TextStim(win=win, name='text_right',
            text=bc_choice_option,
            font='Arial',
            pos=(0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        text_reward_bc = visual.TextStim(win=win, name='text_right',
            text=reward_bc[bc_choice_option],
            font='Arial',
            pos=(0.1, -0.1), height=0.04, wrapWidth=None, ori=0.0,
            color=[0,0,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        no_response = visual.TextStim(win=win, name='no_response',
            text=f'No Response',
            font='Arial',
            pos=(0.0, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);


        border_choic = visual.rect.Rect(win, width=0.5, height=0.5)
        border_choic.size = (0.1,0.1)
        border_choic.lineColor = [0,0,1]
        if key_resp_part.keys == "right":
            text_a.setAutoDraw(True)
            text_bc.setAutoDraw(True)
            text_reward_a.setAutoDraw(True)
            text_reward_bc.setAutoDraw(True)
        #    border_choic.color = [1,0,0]
            border_choic.fillcolor = False
            border_choic.pos = (0.1,0.0)
            sum_reward += reward_bc[bc_choice_option]
            border_choic.setAutoDraw(True)

        elif key_resp_part.keys == "left":
        #    border_choic.color = [0,1,0]
            text_a.setAutoDraw(True)
            text_bc.setAutoDraw(True)
            text_reward_a.setAutoDraw(True)
            text_reward_bc.setAutoDraw(True)
            border_choic.fillcolor = False
            border_choic.pos = (-0.1,0.0)
            sum_reward += reward_a[a_choice_option]
            border_choic.setAutoDraw(True)
      End Routine:
        text_a.setAutoDraw(False)
        text_bc.setAutoDraw(False)
        no_response.setAutoDraw(False)
        border_choic.setAutoDraw(False)
        text_reward_a.setAutoDraw(False)
        text_reward_bc.setAutoDraw(False)
    KeyboardComponent key_resp_confirm
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine partial_trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        import math

        # Define the mean and standard deviation
        mean_A = 64
        std_dev_A = 13
        # Generate rewards for A1 and A2 from N(64, 13)
        reward_A1 = math.ceil(random.gauss(mean_A, std_dev_A))
        reward_A2 = math.ceil(random.gauss(mean_A, std_dev_A))
        a_choice_option = random.choice(["ま", "う"] )
        # degree
        reward_a = {"ま":reward_A1, "う":reward_A2}
        text_a = visual.TextStim(win=win, name='text_left',
            text=a_choice_option,
            font='Arial',
            pos=(-0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        text_reward_a = visual.TextStim(win=win, name='text_right',
            text=reward_a[a_choice_option],
            font='Arial',
            pos=(-0.1, -0.05), height=0.04, wrapWidth=None, ori=0.0,
            color=[0,0,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        # Define the mean and standard deviation
        mean_B = 54
        std_dev_B = 13
        # Generate rewards for B from N(54, 13)
        reward_B = random.gauss(mean_B, std_dev_B)

        # Define the mean and standard deviation
        mean_C = 44
        std_dev_C = 13
        # Generate rewards for C from N(44, 13)
        reward_C = random.gauss(mean_C, std_dev_C)

        reward_bc = {"の":reward_B, "あ": reward_C}
        # degree
        b, c = "の", "あ"
        bc = [b,c]

        bc_choice_option = random.choice(bc)
        text_bc = visual.TextStim(win=win, name='text_right',
            text=bc_choice_option,
            font='Arial',
            pos=(0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        text_reward_bc = visual.TextStim(win=win, name='text_right',
            text=reward_bc[bc_choice_option],
            font='Arial',
            pos=(0.1, -0.05), height=0.04, wrapWidth=None, ori=0.0,
            color=[0,0,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        no_response = visual.TextStim(win=win, name='no_response',
            text=f'No Response',
            font='Arial',
            pos=(0.0, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        text_a.setAutoDraw(True)
        text_bc.setAutoDraw(True)
      Each Frame:
        import time
        #if key_resp_part.keys == "right":
        #    key_resp_part.keys = -1
        #elif key_resp_part.keys == "left":
        #    key_resp_part.keys = 1
        #else:
        #    key_resp_part.keys = float('NaN')
      End Routine:
        text_a.setAutoDraw(False)
        text_bc.setAutoDraw(False)
    KeyboardComponent key_resp_part
      allowedKeys = 'left','right',
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine polygan
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    KeyboardComponent key_resp_pol_train
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_trial
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    CodeComponent code_train
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        import math


        # Define the mean and standard deviation
        mean_A = 64
        std_dev_A = 13
        # Generate rewards for A1 and A2 from N(64, 13)
        reward_A1 = math.ceil(random.gauss(mean_A, std_dev_A))
        reward_A2 = math.ceil(random.gauss(mean_A, std_dev_A))
        a_choice_option = random.choice(["に", "ぬ"] )
        # degree
        reward_a = {"に":reward_A1, "ぬ":reward_A2}
        text_a = visual.TextStim(win=win, name='text_left',
            text=a_choice_option,
            font='Arial',
            pos=(-0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        text_a.setAutoDraw(True)
        text_reward_a = visual.TextStim(win=win, name='text_right',
            text=reward_a[a_choice_option],
            font='Arial',
            pos=(-0.1, -0.05), height=0.04, wrapWidth=None, ori=0.0,
            color=[0,0,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        # Define the mean and standard deviation
        mean_B = 54
        std_dev_B = 13
        # Generate rewards for B from N(54, 13)
        reward_B = random.gauss(mean_B, std_dev_B)

        # Define the mean and standard deviation
        mean_C = 44
        std_dev_C = 13
        # Generate rewards for C from N(44, 13)
        reward_C = random.gauss(mean_C, std_dev_C)

        reward_bc = {"ほ":reward_B, "み": reward_C}
        # degree

        b, c = "ほ", "み"
        bc = [b,c]

        bc_choice_option = random.choice(bc)
        text_bc = visual.TextStim(win=win, name='text_right',
            text=bc_choice_option,
            font='Arial',
            pos=(0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        text_bc.setAutoDraw(True)
        text_reward_bc = visual.TextStim(win=win, name='text_right',
            text=reward_bc[bc_choice_option],
            font='Arial',
            pos=(0.1, -0.05), height=0.04, wrapWidth=None, ori=0.0,
            color=[0,0,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        no_response = visual.TextStim(win=win, name='no_response',
            text=f'No Response',
            font='Arial',
            pos=(0.0, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        text_a.setAutoDraw(True)
        text_bc.setAutoDraw(True)
      Each Frame:
        #import time
        #if key_resp_train.keys == "right":
        #    key_resp_train.keys = -1
        #elif key_resp_train.keys == "left":
        #    key_resp_train.keys = 1
        #else:
        #    key_resp_train.keys = float('NaN')
        ##
      End Routine:
        text_a.setAutoDraw(False)
        text_bc.setAutoDraw(False)
    KeyboardComponent key_resp_train
      allowedKeys = 'left','right' 
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine confirm_train
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    CodeComponent confirmation_code_train
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        import math

        #random_choice_train = random.choice(["right", "left"])
        #key_resp_train.keys = random_choice_train

        # Define the mean and standard deviation
        #mean_A = 64
        #std_dev_A = 13
        # Generate rewards for A1 and A2 from N(64, 13)
        #reward_A1 = math.ceil(random.gauss(mean_A, std_dev_A))
        #reward_A2 = math.ceil(random.gauss(mean_A, std_dev_A))
        #a_choice_option = random.choice(["ま", "う"] )
        # degree
        #reward_a = {"ま":reward_A1, "う":reward_A2}
        text_a = visual.TextStim(win=win, name='text_left',
            text=a_choice_option,
            font='Arial',
            pos=(-0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        text_reward_a = visual.TextStim(win=win, name='text_right',
            text=reward_a[a_choice_option],
            font='Arial',
            pos=(-0.1, -0.1), height=0.04, wrapWidth=None, ori=0.0,
            color=[0,0,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        # Define the mean and standard deviation
        #mean_B = 54
        #std_dev_B = 13
        # Generate rewards for B from N(54, 13)
        reward_B = math.ceil(reward_B)

        # Define the mean and standard deviation
        #mean_C = 44
        #std_dev_C = 13
        # Generate rewards for C from N(44, 13)
        reward_C = math.ceil(reward_C)

        reward_bc = {"ほ":reward_B, "み": reward_C}
        # degree
        b, c = "ほ", "み"
        bc = [b,c]

        #bc_choice_option = random.choice(bc)
        text_bc = visual.TextStim(win=win, name='text_right',
            text=bc_choice_option,
            font='Arial',
            pos=(0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        text_reward_bc = visual.TextStim(win=win, name='text_right',
            text=reward_bc[bc_choice_option],
            font='Arial',
            pos=(0.1, -0.1), height=0.04, wrapWidth=None, ori=0.0,
            color=[0,0,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);


        border_choic = visual.rect.Rect(win, width=0.5, height=0.5)
        border_choic.size = (0.1,0.1)
        border_choic.lineColor = [0,0,1]

        no_response = visual.TextStim(win=win, name='no_response',
            text=f'No Response',
            font='Arial',
            pos=(0.0, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        # Right
        if key_resp_train.keys == "right":
            text_a.setAutoDraw(True)
            text_bc.setAutoDraw(True)
            text_reward_a.setAutoDraw(True)
            text_reward_bc.setAutoDraw(True)
            border_choic.fillcolor = False
            border_choic.pos = (0.1,0.0)
            border_choic.setAutoDraw(True)
        # Left
        elif key_resp_train.keys == "left":
            text_a.setAutoDraw(True)
            text_bc.setAutoDraw(True)
            text_reward_a.setAutoDraw(True)
            text_reward_bc.setAutoDraw(True)
            border_choic.fillcolor = False
            border_choic.pos = (-0.1,0.0)
            border_choic.setAutoDraw(True)
        #No response
        else:
            no_response.setAutoDraw(True)
      End Routine:
        text_a.setAutoDraw(False)
        text_bc.setAutoDraw(False)
        no_response.setAutoDraw(False)
        border_choic.setAutoDraw(False)
        text_reward_a.setAutoDraw(False)
        text_reward_bc.setAutoDraw(False)
    KeyboardComponent key_resp_confirm_train
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine inst
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    TextComponent partial_ex
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Training Session: Before the main task, you will go through a short training session of 20 trials to become familiar with the learning phase. The stimuli and reward statistics during training will differ from the main session.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_post_learning
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    TextComponent inst_post_learning_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Post-Learning Phase: After completing the learning tasks, you will be presented with all possible binary combinations of options. Your goal is to select the option with the highest expected reward. No feedback will be provided in this phase to avoid influencing your previous learning.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay_post_learning
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    CodeComponent code_delay_post_learning
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random



        # Define the mean and standard deviation
        mean_A = 64
        std_dev_A = 13
        # Generate rewards for A1 and A2 from N(64, 13)
        reward_A1 = math.ceil(random.gauss(mean_A, std_dev_A))
        reward_A2 = math.ceil(random.gauss(mean_A, std_dev_A))

        a_choice_option = random.choice(["ま", "う"] )
        # degree
        reward_a = {"ま":reward_A1, "う":reward_A2}
        text_a = visual.TextStim(win=win, name='text_left',
            text=a_choice_option,
            font='Arial',
            pos=(-0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        #text_reward_a = visual.TextStim(win=win, name='text_right',
        #    text=reward_a[a_choice_option],
        #    font='Arial',
        #    pos=(-0.1, -0.05), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[0,0,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);

        # Define the mean and standard deviation
        mean_B = 54
        std_dev_B = 13
        # Generate rewards for B from N(54, 13)
        reward_B = random.gauss(mean_B, std_dev_B)

        # Define the mean and standard deviation
        mean_C = 44
        std_dev_C = 13
        # Generate rewards for C from N(44, 13)
        reward_C = random.gauss(mean_C, std_dev_C)

        reward_bc = {"の":reward_B, "あ": reward_C}
        # degree
        b, c = "の", "あ"
        bc = [b,c]

        bc_choice_option = random.choice(bc)
        text_bc = visual.TextStim(win=win, name='text_right',
            text=bc_choice_option,
            font='Arial',
            pos=(0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        #text_reward_bc = visual.TextStim(win=win, name='text_right',
        #    text=reward_bc[bc_choice_option],
        #    font='Arial',
        #    pos=(0.1, -0.05), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[0,0,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);

        no_response = visual.TextStim(win=win, name='no_response',
            text=f'No Response',
            font='Arial',
            pos=(0.0, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        text_a.setAutoDraw(True)
        text_bc.setAutoDraw(True)
      Each Frame:
        import time
        if key_resp_post.keys == "right":
            key_resp_post.keys = -1
        elif key_resp_post.keys == "left":
            key_resp_post.keys = 1
        else:
            key_resp_post.keys = float('NaN')
      End Routine:
        text_a.setAutoDraw(False)
        text_bc.setAutoDraw(False)
    KeyboardComponent key_resp_post
      allowedKeys = 'left','right',
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine preference_post_learning
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    CodeComponent confirmation_code_2
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        import math
        import statistics

        # Define the mean and standard deviation
        #mean_A = 64
        #std_dev_A = 13
        # Generate rewards for A1 and A2 from N(64, 13)
        #reward_A1 = math.ceil(random.gauss(mean_A, std_dev_A))
        #reward_A2 = math.ceil(random.gauss(mean_A, std_dev_A))
        #a_choice_option = random.choice(["ま", "う"] )
        # degree
        #reward_a = {"ま":reward_A1, "う":reward_A2}
        text_a = visual.TextStim(win=win, name='text_left',
            text=a_choice_option,
            font='Arial',
            pos=(-0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        #text_a.setAutoDraw(True)
        #text_reward_a = visual.TextStim(win=win, name='text_right',
        #    text=reward_a[a_choice_option],
        #    font='Arial',
        #    pos=(-0.1, -0.1), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[0,0,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);

        # Define the mean and standard deviation
        #mean_B = 54
        #std_dev_B = 13
        # Generate rewards for B from N(54, 13)
        reward_B = math.ceil(reward_B)

        # Define the mean and standard deviation
        #mean_C = 44
        #std_dev_C = 13
        # Generate rewards for C from N(44, 13)
        reward_C = math.ceil(reward_C)

        reward_bc = {"の":reward_B, "あ": reward_C}
        # degree
        b, c = "の", "あ"
        bc = [b,c]

        #bc_choice_option = random.choice(bc)
        text_bc = visual.TextStim(win=win, name='text_right',
            text=bc_choice_option,
            font='Arial',
            pos=(0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        #text_bc.setAutoDraw(True)
        #text_reward_bc = visual.TextStim(win=win, name='text_right',
        #    text=reward_bc[bc_choice_option],
        #    font='Arial',
        #    pos=(0.1, -0.1), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[0,0,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);




        no_response = visual.TextStim(win=win, name='no_response',
            text=f'No Response',
            font='Arial',
            pos=(0.0, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        border_choic = visual.rect.Rect(win, width=0.5, height=0.5)
        border_choic.size = (0.1,0.1)
        border_choic.lineColor = [0,0,1]
        if key_resp_post.keys == "right":
            text_a.setAutoDraw(True)
            text_bc.setAutoDraw(True)
        #    text_reward_bc.setAutoDraw(True)
        #    border_choic.color = [1,0,0]
            border_choic.fillcolor = False
            border_choic.pos = (0.1,0.0)

        elif key_resp_post.keys == "left":
        #    border_choic.color = [0,1,0]
            text_a.setAutoDraw(True)
            text_bc.setAutoDraw(True)
        #    text_reward_a.setAutoDraw(True)
            border_choic.fillcolor = False
            border_choic.pos = (-0.1,0.0)
        border_choic.setAutoDraw(True)
        # Calculate Mean of A1 and A2 to finished loop
        #sumA1.append(reward_a[a_choice_option])
        #sumA2.append(reward_a[a_choice_option])
        #meanA1 = statistics.mean(sumA1)
        #meanA2 = statistics.mean(sumA)
        #if abs(meanA1 - meanA2) <= 1:
        #    learning.finished = True
      End Routine:
        text_a.setAutoDraw(False)
        text_bc.setAutoDraw(False)
        no_response.setAutoDraw(False)
        border_choic.setAutoDraw(False)
        #text_reward_a.setAutoDraw(False)
        #text_reward_bc.setAutoDraw(False)
    KeyboardComponent key_resp_post_learning
      allowedKeys = 'left','right',
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine confidence_post_learning
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Completely Unsure","Completely Sure"
      letterHeight = 0.03
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6 ,7)
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  Routine Estim_exp
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    TextComponent estim_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Estimation Phase: In this final phase, you will estimate the expected value of each option based on your experience. Report your estimated value on a scale from 0 to 100 for each stimulus. Remember, accuracy in estimating the rewards of advantageous options is key. 
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine six_stimuli_const
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    CodeComponent code_stimuli_estim
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Define the list of stimuli
        STIMULI_ESTIM = ["ま", "う", "の", "あ", 'ゆ ', 'や '] * 4

        # Shuffle the list to ensure the elements are in a random order
        random.shuffle(STIMULI_ESTIM)
  Routine estim_stimul
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    CodeComponent code_estim
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random




        text_stimuli = STIMULI_ESTIM.pop()

        stimuli = visual.TextStim(win=win, name='text_left',
            text=text_stimuli,
            font='Arial',
            pos=(-0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        stimuli.setAutoDraw(True)
      End Routine:
        stimuli.setAutoDraw(False)
    KeyboardComponent key_resp_estim
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine estim_reward
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    SliderComponent slider_estim
      forceEndRoutine = True
      granularity = 0
      labels = "10", "20", "30", "40", "50", "60", "70", "80", "90", "100"
      letterHeight = 0.03
      pos = (0, 0.0)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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  Routine code_total_reward
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  Routine inst_learning
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    TextComponent partial_ex_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Learning Phase: You will be presented with two stimuli on the screen in each trial and must choose the option with the higher expected reward. This will involve gradually learning through trial and error.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sum_reward
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    CodeComponent code_sum_reward
      Code Type = Auto->JS
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      Begin Experiment:
        #We Update this variable in each time over learning faz
        sum_reward = 0
  Routine confirmation_post_learning
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    CodeComponent code_post_learning_confirm
      Code Type = Auto->JS
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      End Routine:
        text_a.setAutoDraw(False)
        text_bc.setAutoDraw(False)
        no_response.setAutoDraw(False)
        border_choic.setAutoDraw(False)
        text_reward_a.setAutoDraw(False)
        text_reward_bc.setAutoDraw(False)
    KeyboardComponent key_resp_post_learning_confirm
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine polygan_post
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    KeyboardComponent key_resp_pol_post
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    TextComponent text_ins_total
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Here are the instructions for the training phase according to the paper:

        - Task Structure: You will participate in an instrumental learning task adapted from previous studies. The task consists of three phases: learning, post-learning transfer, and value estimation.

        - Feedback Versions: There are two versions of the task:
          - Partial Feedback: Only outcomes for the chosen option (factual outcomes) are provided.
          - Complete Feedback: Outcomes for both the chosen and unchosen options (factual and counterfactual outcomes) are provided.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sum_reward_final
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        sum_rew = visual.TextStim(win=win, name='sum_rew',
            text=f"{sum_reward}",
            font='Arial',
            pos=(0.0, 0.0), height=0.1, wrapWidth=None, ori=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        sum_rew.setAutoDraw(True)
      End Routine:
        sum_rew.setAutoDraw(False)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Your  Total Reward is :
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  Routine instruction_2
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        - Training Session: Before the main task, you will go through a short training session of 20 trials to become familiar with the learning phase. The stimuli and reward statistics during training- Stimuli: The stimuli will be selected from the Japanese Hiragana alphabet.

        - Learning Phase: You will be presented with two stimuli on the screen in each trial and must choose the option with the higher expected reward. This will involve gradually learning through trial and error.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_3
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        - Presentation: Stimuli will be presented on either side of the fixation point, and you must select your choice within 4,000 ms to avoid missing the reward.

        - Outcome Presentation: In the Partial version, the factual outcome is shown below the chosen option for 500 ms. In the Complete version, both factual and counterfactual outcomes are shown for 1,000 ms.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_4
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    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Remember, the goal is to maximize your rewards by learning the value of each option through the outcomes presented during the task. Good luck! will differ from the main session.
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  Routine instruction_2
  Routine instruction_3
  Routine instruction_4
  Routine inst
  LoopInitiator train loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine polygan
    Routine training_trial
    Routine confirm_train
  LoopTerminator train
  Routine inst_learning
  Routine sum_reward
  LoopInitiator learning loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine polygan_self
    Routine partial_trial
    Routine confirmation
  LoopTerminator learning
  Routine inst_post_learning
  LoopInitiator post_learning loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine polygan_post
    Routine delay_post_learning
    Routine preference_post_learning
    Routine confidence_post_learning
  LoopTerminator post_learning
  Routine Estim_exp
  Routine six_stimuli_const
  LoopInitiator estimation loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine estim_stimul
    Routine estim_reward
  LoopTerminator estimation
  Routine sum_reward_final
