PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = sess_1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine inst_predict
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    TextComponent predict_ex
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Predict
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    KeyboardComponent pred_ex_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine observe_ex
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Observe
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine confirmation
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    CodeComponent confirmation_code_pred
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random

        # Set random start and end angles

        #percentage_slice_1 = random.uniform(0.0, 1.0)
        pie_pred = psychopy.visual.Pie(win, radius=0.5, start=0, end=percentage_slice_1_pred* 360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[0,1,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[0,1,0])
        pie_pred.setColor = [1,0,1]
        pie_pred.setAutoDraw(True)

        #random_text_accept = visual.TextStim(win=win, name='random_text',
        #    text=f'$22',
        #    font='Arial',
        #    pos=(0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_accept_pred.setAutoDraw(True)
        # Define the position and size of the text
        text_pos = (0.1, 0.0)
        text_height = 0.04
        text_width = 0.2  # Adjust this width to fit your text
        background_rect = visual.Rect(
            win=win,
            depth=-1.0,
            width=text_width/2.0,
            height=text_height,  # Slightly larger than text height to provide padding
            pos=text_pos,
            fillColor='black',  # Background color
            lineColor='black'  # Same as fill color to hide the border
        )
        #round_percentage_slice_1 = round(percentage_slice_1 * 100)
        random_text_accept_pred = visual.TextStim(win=win, name='random_text',
            text=f'$22',
            font='Arial',
            pos=(0.1, 0.0), height=text_height, wrapWidth=None, ori=0.0,
            opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        random_text_accept_pred.color=[1,1,1]
        random_text_accept_pred.setAutoDraw(True)
        random_text_accept_pred.setAutoDraw(True)
        background_rect.setAutoDraw(True)

        # Slice 2
        pie_2_pred = psychopy.visual.Pie(win, radius=0.5, start=percentage_slice_1_pred* 360, end=360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[1,0,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[1,0,0])
        pie_2_pred.setColor = [1,0,0]
        pie_2_pred.setAutoDraw(True)

        percentage_slice_2_pred = 1 - percentage_slice_1_pred
        percentage_reject_pred = round(percentage_slice_2_pred * 100)
        #random_text_reject_pred = visual.TextStim(win=win, name='random_text',
        #    text=f'{percentage_reject_pred}',
        #    font='Arial',
        #    pos=(-0.06, -0.06), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_reject_pred.setAutoDraw(True)
        border_choic = visual.rect.Rect(win, width=0.5, height=0.5)
        border_choic.size = (0.3,0.1)
        border_choic.lineColor = [1,1,0]
        border_choic.fillColor = None
        if key_resp_pred.keys == -1:

        #    border_choic.color = [1,0,0]
        #    border_choic.fillcolor = False
            border_choic.pos = (0.3,-0.3)


        elif key_resp_pred.keys == 1:
        #    border_choic.color = [0,1,0]
        #    border_choic.fillcolor = False
            border_choic.pos = (-0.3,-0.3)
        else:
            pass

        thisExp.addData('predict_option', key_resp_pred.keys)
        border_choic.setAutoDraw(True)
      End Routine:
        pie_pred.setAutoDraw(False)
        pie_2_pred.setAutoDraw(False)
        random_text_accept_pred.setAutoDraw(False)
        background_rect.setAutoDraw(False)
        #random_text_reject_pred.setAutoDraw(False)
        border_choic.setAutoDraw(False)
    KeyboardComponent key_resp_confirm_pred
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent accept_button_confirm_pred
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Accept
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    TextComponent reject_button_confirm_pred
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Reject
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  Routine observe_trial
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        # Set random start and end angles

        percentage_slice_1_obs = random.uniform(0.2, 0.3)
        pie_obs = psychopy.visual.Pie(win, radius=0.5, start=0, end=percentage_slice_1_obs* 360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[0,1,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[0,1,0])
        pie_obs.setColor = [1,0,1]
        pie_obs.setAutoDraw(True)


        # degree
        #round_percentage_slice_1_obs = round(percentage_slice_1_obs * 100)
        #random_text_accept_obs = visual.TextStim(win=win, name='random_text',
        #    text=f'{round_percentage_slice_1_obs}',
        #    font='Arial',
        #    pos=(0.1, 0.0), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_accept_obs.setAutoDraw(True)
        # Define the position and size of the text
        text_pos = (0.1, 0.0)
        text_height = 0.04
        text_width = 0.2  # Adjust this width to fit your text
        background_rect = visual.Rect(
            win=win,
            depth=-1.0,
            width=text_width/2.0,
            height=text_height,  # Slightly larger than text height to provide padding
            pos=text_pos,
            fillColor='black',  # Background color
            lineColor='black'  # Same as fill color to hide the border
        )
        round_percentage_slice_1_obs = round(percentage_slice_1_pred * 100)
        random_text_accept_obs = visual.TextStim(win=win, name='random_text',
            text=f'$22',
            font='Arial',
            pos=(0.1, 0.0), height=text_height, wrapWidth=None, ori=0.0,
            opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        random_text_accept_obs.color=[1,1,1]
        random_text_accept_obs.setAutoDraw(True)
        random_text_accept_obs.setAutoDraw(True)
        background_rect.setAutoDraw(True)
        # Slice 2

        pie_2_obs = psychopy.visual.Pie(win, radius=0.5, start=percentage_slice_1_obs* 360, end=360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[1,0,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[1,0,0])
        pie_2_obs.setColor = [1,0,0]
        pie_2_obs.setAutoDraw(True)

        percentage_slice_2_obs = 1 - percentage_slice_1_obs
        percentage_reject_obs = round(percentage_slice_2_obs * 100)
        #random_text_reject_obs = visual.TextStim(win=win, name='random_text',
        #    text=f'{percentage_reject_obs}',
        #    font='Arial',
        #    pos=(-0.06, -0.06), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_reject_obs.setAutoDraw(True)

        lower_bound = -1
        upper_bound = 1
        probability = 0.7
        chosen_option = 0
        if random.random() < probability:
            chosen_option = upper_bound
        else:
            chosen_option = lower_bound

        thisExp.addData('observe_option', chosen_option)
      End Routine:
        pie_obs.setAutoDraw(False)
        pie_2_obs.setAutoDraw(False)
        random_text_accept_obs.setAutoDraw(False)
        #random_text_reject_obs.setAutoDraw(False)
        background_rect.setAutoDraw(False)
    KeyboardComponent key_resp_observe_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent accept_button_observe
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Accept
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    TextComponent reject_button_observe
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Reject
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    CodeComponent key_res_observe_to_num
      Code Type = Auto->JS
      Each Frame:
        #import time
        #if key_resp_self.keys == "right":
        #    key_resp_self.keys = -1
        #else:
        #    key_resp_self.keys = 1
  Routine observe_confirmation
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    CodeComponent code_confirmation_obs
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random

        # Set random start and end angles

        #percentage_slice_1 = random.uniform(0.2, 0.3)
        pie_obs_conf = psychopy.visual.Pie(win, radius=0.5, start=0, end=percentage_slice_1_obs* 360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[0,1,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[0,1,0])
        pie_obs_conf.setColor = [1,0,1]
        pie_obs_conf.setAutoDraw(True)

        # degree
        #round_percentage_slice_1 = round(percentage_slice_1 * 100)
        #random_text_accept_obs_conf = visual.TextStim(win=win, name='random_text',
        #    text=f'{round_percentage_slice_1_obs}',
        #    font='Arial',
        #    pos=(0.09, 0.1), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_accept_obs_conf.setAutoDraw(True)
        text_pos = (0.1, 0.0)
        text_height = 0.04
        text_width = 0.2  # Adjust this width to fit your text
        background_rect = visual.Rect(
            win=win,
            depth=-1.0,
            width=text_width/2.0,
            height=text_height,  # Slightly larger than text height to provide padding
            pos=text_pos,
            fillColor='black',  # Background color
            lineColor='black'  # Same as fill color to hide the border
        )
        round_percentage_slice_1_obs = round(percentage_slice_1_pred * 100)
        random_text_accept_obs_conf = visual.TextStim(win=win, name='random_text',
            text=f'$22',
            font='Arial',
            pos=(0.1, 0.0), height=text_height, wrapWidth=None, ori=0.0,
            opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        random_text_accept_obs_conf.color=[1,1,1]
        random_text_accept_obs_conf.setAutoDraw(True)
        random_text_accept_obs_conf.setAutoDraw(True)
        background_rect.setAutoDraw(True)
        # Slice 2

        pie_2_obs_conf = psychopy.visual.Pie(win, radius=0.5, start=percentage_slice_1_obs* 360, end=360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[1,0,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[1,0,0])
        pie_2_obs_conf.setColor = [1,0,0]
        pie_2_obs_conf.setAutoDraw(True)

        percentage_slice_2_obs_conf = 1 - percentage_slice_1_obs
        percentage_reject_obs_conf = round(percentage_slice_2_obs_conf * 100)
        #random_text_reject_obs_conf = visual.TextStim(win=win, name='random_text',
        #    text=f'{percentage_reject_obs_conf}',
        #    font='Arial',
        #    pos=(-0.06, -0.06), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_reject_obs_conf.setAutoDraw(True)

        border_choic = visual.rect.Rect(win, width=0.5, height=0.5)
        border_choic.size = (0.3,0.1)
        border_choic.lineColor = [1,1,0]
        border_choic.fillColor = None
        if chosen_option == -1:

        #    border_choic.color = [1,0,0]
        #    border_choic.fillcolor = False
            border_choic.pos = (0.3,-0.3)


        elif chosen_option == 1:
        #    border_choic.color = [0,1,0]
        #    border_choic.fillcolor = False
            border_choic.pos = (-0.3,-0.3)
        else:
            pass



        border_choic.setAutoDraw(True)
      End Routine:
        pie_obs_conf.setAutoDraw(False)
        pie_2_obs_conf.setAutoDraw(False)
        random_text_accept_obs_conf.setAutoDraw(False)
        #random_text_reject_obs_conf.setAutoDraw(False)
        border_choic.setAutoDraw(False)
        background_rect.setAutoDraw(False)
    KeyboardComponent key_resp_conf_obs
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent accept_button_conf_obs
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Accept
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    TextComponent reject_button_conf_obs
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Reject
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  Routine polygan
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_pol_self_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_ex
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    TextComponent sess_2_ex
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Eplanation of Self
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    KeyboardComponent key_resp_sess_2_ex
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pred_trial
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    CodeComponent code_pred
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        # Set random start and end angles

        percentage_slice_1_pred = random.uniform(0.0, 1.0)
        pie_pred = psychopy.visual.Pie(win, radius=0.5, start=0, end=percentage_slice_1_pred* 360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[0,1,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[0,1,0])
        pie_pred.setColor = [1,0,1]
        pie_pred.setAutoDraw(True)
        # degree
        round_percentage_slice_1_pred = round(percentage_slice_1_pred * 100)
        #random_text_accept_pred = visual.TextStim(win=win, name='random_text',
        #    text=f'{round_percentage_slice_1_pred}',
        #    font='Arial',
        #    pos=(0.09, 0.1), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_accept_pred.setAutoDraw(True)

        # Define the position and size of the text
        text_pos = (0.1, 0.0)
        text_height = 0.04
        text_width = 0.2  # Adjust this width to fit your text
        background_rect = visual.Rect(
            win=win,
            depth=-1.0,
            width=text_width/2.0,
            height=text_height,  # Slightly larger than text height to provide padding
            pos=text_pos,
            fillColor='black',  # Background color
            lineColor='black'  # Same as fill color to hide the border
        )
        #round_percentage_slice_1 = round(percentage_slice_1_pred * 100)
        random_text_accept_pred = visual.TextStim(win=win, name='random_text',
            text=f'$22',
            font='Arial',
            pos=(0.1, 0.0), height=text_height, wrapWidth=None, ori=0.0,
            opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        random_text_accept_pred.color=[1,1,1]
        random_text_accept_pred.setAutoDraw(True)
        random_text_accept_pred.setAutoDraw(True)
        background_rect.setAutoDraw(True)

        # Slice 2

        pie_2_pred = psychopy.visual.Pie(win, radius=0.5, start=percentage_slice_1_pred* 360, end=360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[1,0,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[1,0,0])
        pie_2_pred.setColor = [1,0,0]
        pie_2_pred.setAutoDraw(True)

        percentage_slice_2_pred = 1 - percentage_slice_1_pred
        #percentage_reject_pred = round(percentage_slice_2_pred * 100)
        #random_text_reject_pred = visual.TextStim(win=win, name='random_text',
        #    text=f'{percentage_reject_pred}',
        #    font='Arial',
        #    pos=(-0.06, -0.06), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_reject_pred.setAutoDraw(True)
        #
      Each Frame:
        import time
        if key_resp_pred.keys == "right":
            key_resp_pred.keys = -1
        else:
            key_resp_pred.keys = 1
      End Experiment:
        pie_pred.setAutoDraw(False)
        pie_2_pred.setAutoDraw(False)
        random_text_accept_pred.setAutoDraw(False)
        #random_text_reject_pred.setAutoDraw(False)
        #
      End Routine:
        pie_pred.setAutoDraw(False)
        pie_2_pred.setAutoDraw(False)
        random_text_accept_pred.setAutoDraw(False)
        background_rect.setAutoDraw(False)
        #random_text_reject_pred.setAutoDraw(False)
    KeyboardComponent key_resp_pred
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent accept_button
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = Accept
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    TextComponent reject_button
      color = 1.0000, 1.0000, 1.0000
      languageStyle = RTL
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = Reject
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    CodeComponent key_resp_pred_to_num
      Code Type = Auto->JS
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      Each Frame:
        import time
        if key_resp_pred.keys == "right":
            key_resp_pred.keys = -1
        else:
            key_resp_pred.keys = 1
  Routine self_trial
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    CodeComponent code_self_trial
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        # Set random start and end angles

        percentage_slice_1 = random.uniform(0.2, 0.3)
        pie = psychopy.visual.Pie(win, radius=0.5, start=0, end=percentage_slice_1* 360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[0,1,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[0,1,0])
        pie.setColor = [1,0,1]
        pie.setAutoDraw(True)
        # degree
        round_percentage_slice_1 = round(percentage_slice_1 * 100)
        #random_text_accept = visual.TextStim(win=win, name='random_text',
        #    text=f'{round_percentage_slice_1}',
        #    font='Arial',
        #    pos=(0.09, 0.1), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_accept.setAutoDraw(True)
        text_pos = (0.1, 0.0)
        text_height = 0.04
        text_width = 0.2  # Adjust this width to fit your text
        background_rect = visual.Rect(
            win=win,
            depth=-1.0,
            width=text_width/2.0,
            height=text_height,  # Slightly larger than text height to provide padding
            pos=text_pos,
            fillColor='black',  # Background color
            lineColor='black'  # Same as fill color to hide the border
        )
        round_percentage_slice_1_obs = round(percentage_slice_1_pred * 100)
        random_text_accept = visual.TextStim(win=win, name='random_text',
            text=f'$22',
            font='Arial',
            pos=(0.1, 0.0), height=text_height, wrapWidth=None, ori=0.0,
            opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        random_text_accept.color=[1,1,1]
        random_text_accept.setAutoDraw(True)
        random_text_accept.setAutoDraw(True)
        background_rect.setAutoDraw(True)
        # Slice 2

        pie_2 = psychopy.visual.Pie(win, radius=0.5, start=percentage_slice_1* 360, end=360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[1,0,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[1,0,0])
        pie_2.setColor = [1,0,0]
        pie_2.setAutoDraw(True)

        percentage_slice_2 = 1 - percentage_slice_1
        percentage_reject = round(percentage_slice_2 * 100)
        #random_text_reject = visual.TextStim(win=win, name='random_text',
        #    text=f'{percentage_reject}',
        #    font='Arial',
        #    pos=(-0.06, -0.06), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_reject.setAutoDraw(True)
        #
      Each Frame:
        import time
        if key_resp_self.keys == "right":
            key_resp_self.keys = -1
        else:
            key_resp_self.keys = 1
      End Experiment:
        #pie.setAutoDraw(False)
        #pie_2.setAutoDraw(False)
        #random_text_accept.setAutoDraw(False)
        #random_text_reject.setAutoDraw(False)
      End Routine:
        pie.setAutoDraw(False)
        pie_2.setAutoDraw(False)
        random_text_accept.setAutoDraw(False)
        #random_text_reject.setAutoDraw(False)
        background_rect.setAutoDraw(False)
    KeyboardComponent key_resp_self
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent accept_button_self
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = Accept
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    TextComponent reject_button_self
      color = 1.0000, 1.0000, 1.0000
      languageStyle = RTL
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = Reject
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    CodeComponent key_reso_self_to_num_2
      Code Type = Auto->JS
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      Each Frame:
        import time
        if key_resp_self.keys == "right":
            key_resp_self.keys = -1
        else:
            key_resp_self.keys = 1
  Routine self_confirm
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    CodeComponent self_confirmation_code
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        # Set random start and end angles

        #percentage_slice_1 = random.uniform(0.2, 0.3)
        pie = psychopy.visual.Pie(win, radius=0.5, start=0, end=percentage_slice_1* 360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[0,1,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[0,1,0])
        pie.setColor = [1,0,1]
        pie.setAutoDraw(True)
        # degree
        #round_percentage_slice_1 = round(percentage_slice_1 * 100)
        #random_text_accept = visual.TextStim(win=win, name='random_text',
        #    text=f'{round_percentage_slice_1}',
        #    font='Arial',
        #    pos=(0.09, 0.1), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_accept.setAutoDraw(True)
        text_pos = (0.1, 0.0)
        text_height = 0.04
        text_width = 0.2  # Adjust this width to fit your text
        background_rect = visual.Rect(
            win=win,
            depth=-1.0,
            width=text_width/2.0,
            height=text_height,  # Slightly larger than text height to provide padding
            pos=text_pos,
            fillColor='black',  # Background color
            lineColor='black'  # Same as fill color to hide the border
        )
        round_percentage_slice_1_obs = round(percentage_slice_1_pred * 100)
        random_text_accept = visual.TextStim(win=win, name='random_text',
            text=f'$22',
            font='Arial',
            pos=(0.1, 0.0), height=text_height, wrapWidth=None, ori=0.0,
            opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        random_text_accept.color=[1,1,1]
        random_text_accept.setAutoDraw(True)
        random_text_accept.setAutoDraw(True)
        background_rect.setAutoDraw(True)
        # Slice 2

        pie_2 = psychopy.visual.Pie(win, radius=0.5, start=percentage_slice_1* 360, end=360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[1,0,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[1,0,0])
        pie_2.setColor = [1,0,0]
        pie_2.setAutoDraw(True)

        percentage_slice_2 = 1 - percentage_slice_1
        percentage_reject = round(percentage_slice_2 * 100)
        #random_text_reject = visual.TextStim(win=win, name='random_text',
        #    text=f'{percentage_reject}',
        #    font='Arial',
        #    pos=(-0.06, -0.06), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_reject.setAutoDraw(True)
        border_choic = visual.rect.Rect(win, width=0.5, height=0.5)
        border_choic.size = (0.3,0.1)
        border_choic.lineColor = [1,1,0]
        border_choic.fillColor = None
        if key_resp_self.keys == -1:

        #    border_choic.color = [1,0,0]
        #    border_choic.fillcolor = False
            border_choic.pos = (0.3,-0.3)

        elif key_resp_self.keys == 1:
        #    key_resp_self.keys = 1
        #    border_choic.color = [0,1,0]
        #    border_choic.fillcolor = False
            border_choic.pos = (-0.3,-0.3)
        else:
            pass
        border_choic.setAutoDraw(True)
      End Routine:
        pie.setAutoDraw(False)
        pie_2.setAutoDraw(False)
        random_text_accept.setAutoDraw(False)
        #random_text_reject.setAutoDraw(False)
        border_choic.setAutoDraw(False)
        background_rect.setAutoDraw(False)
    KeyboardComponent key_resp_self_confirm
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent accept_button_self_confirm
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Accept
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    TextComponent reject_button_self_confirm
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Reject
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  Routine instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Session 4: Observe and Predict Trials
        Participants observe decisions made by a risk-seeking confederate and predict their choices.
        including all 3 type of trial (self, observe and predict)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator total_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine inst_predict
    LoopInitiator predict loopType="TrialHandler"
      loopType = random
      nReps = 6
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      Routine pred_trial
      Routine confirmation
      Routine polygan
    LoopTerminator predict
    LoopInitiator fourteen_sequence loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine observe_ex
      LoopInitiator observe_trial_loop loopType="TrialHandler"
        loopType = random
        nReps = 14
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        Routine observe_trial
        Routine observe_confirmation
        Routine polygan
      LoopTerminator observe_trial_loop
      Routine self_ex
      LoopInitiator self_trial_loop loopType="TrialHandler"
        loopType = random
        nReps = 14
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        Routine self_trial
        Routine self_confirm
        Routine polygan
      LoopTerminator self_trial_loop
    LoopTerminator fourteen_sequence
  LoopTerminator total_loop
  Routine inst_predict
  LoopInitiator pred_trials_loop loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine pred_trial
    Routine confirmation
    Routine polygan
  LoopTerminator pred_trials_loop
