PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = sess_1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine polygan_self
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_pol_self_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        # Set random start and end angles

        percentage_slice_1 = random.uniform(0.0, 1.0)
        pie = psychopy.visual.Pie(win, radius=0.5, start=0, end=percentage_slice_1* 360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[0,1,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[0,1,0])
        pie.setColor = [1,0,1]
        pie.setAutoDraw(True)

        # Define the position and size of the text
        text_pos = (0.1, 0.0)
        text_height = 0.04
        text_width = 0.2  # Adjust this width to fit your text
        background_rect = visual.Rect(
            win=win,
            depth=-1.0,
            width=text_width/2.0,
            height=text_height,  # Slightly larger than text height to provide padding
            pos=text_pos,
            fillColor='black',  # Background color
            lineColor='black'  # Same as fill color to hide the border
        )
        round_percentage_slice_1 = round(percentage_slice_1 * 100)
        random_text_accept = visual.TextStim(win=win, name='random_text',
            text=f'$22',
            font='Arial',
            pos=(0.1, 0.0), height=text_height, wrapWidth=None, ori=0.0,
            opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        random_text_accept.color=[1,1,1]
        random_text_accept.setAutoDraw(True)
        background_rect.setAutoDraw(True)
        # Slice 2

        pie_2 = psychopy.visual.Pie(win, radius=0.5, start=percentage_slice_1* 360, end=360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[1,0,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[1,0,0])
        pie_2.setColor = [1,0,0]
        pie_2.setAutoDraw(True)

        percentage_slice_2 = 1 - percentage_slice_1
        percentage_reject = round(percentage_slice_2 * 100)
        #random_text_reject = visual.TextStim(win=win, name='random_text',
        #    text=f'{percentage_reject}',
        #    font='Arial',
        #    pos=(-0.06, -0.06), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_reject.setAutoDraw(True)
        #
      Each Frame:
        import time
        if key_resp_self.keys == "right":
            key_resp_self.keys = -1
        else:
            key_resp_self.keys = 1
      End Experiment:
        #pie.setAutoDraw(False)
        #pie_2.setAutoDraw(False)
        #random_text_accept.setAutoDraw(False)
        #random_text_reject.setAutoDraw(False)
      End Routine:
        pie.setAutoDraw(False)
        pie_2.setAutoDraw(False)
        random_text_accept.setAutoDraw(False)
        background_rect.setAutoDraw(False)
    KeyboardComponent key_resp_self
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent accept_button
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = Accept
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    TextComponent reject_button
      color = 1.0000, 1.0000, 1.0000
      languageStyle = RTL
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = Reject
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    CodeComponent key_resp_self_to_num
      Code Type = Auto->JS
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      Each Frame:
        import time
        if key_resp_self.keys == "right":
            key_resp_self.keys = -1
        else:
            key_resp_self.keys = 1
  Routine confirmation
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    CodeComponent confirmation_code
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy
        import random
        # Set random start and end angles

        #percentage_slice_1 = random.uniform(0.2, 0.3)
        pie = psychopy.visual.Pie(win, radius=0.5, start=0, end=percentage_slice_1* 360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[0,1,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[0,1,0])
        pie.setColor = [1,0,1]
        pie.setAutoDraw(True)



        #round_percentage_slice_1 = round(percentage_slice_1 * 100)
        random_text_accept = visual.TextStim(win=win, name='random_text',
            text=f'$22',
            font='Arial',
            pos=(0.1, 0.0), height=text_height, wrapWidth=None, ori=0.0,
            opacity=None,
            languageStyle='LTR',
            depth=-2.0);
        random_text_accept.color=[1,1,1]
        random_text_accept.setAutoDraw(True)
        # Draw the background rectangle
        background_rect.setAutoDraw(True)

        # Slice 2

        pie_2 = psychopy.visual.Pie(win, radius=0.5, start=percentage_slice_1* 360, end=360, edges=32,
        units='', lineWidth=1.5, lineColor=(0,1,0), fillColor=False,
        pos=(0, 0), size=0.5, opacity=1.0, contrast=1.0,
        depth=0, interpolate=False, name=None, autoLog=None, autoDraw=False,
        colorSpace=(1,1,0), color=[1,0,0], fillColorSpace='rgb', lineColorSpace='rgb',
        lineRGB=True, fillRGB=[1,0,0])
        pie_2.setColor = [1,0,0]
        pie_2.setAutoDraw(True)

        percentage_slice_2 = 1 - percentage_slice_1
        percentage_reject = round(percentage_slice_2 * 100)
        #random_text_reject = visual.TextStim(win=win, name='random_text',
        #    text=f'{percentage_reject}',
        #    font='Arial',
        #    pos=(-0.06, -0.06), height=0.04, wrapWidth=None, ori=0.0,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    languageStyle='LTR',
        #    depth=-2.0);
        #random_text_reject.setAutoDraw(True)
        border_choic = visual.rect.Rect(win, width=0.5, height=0.5)
        border_choic.size = (0.3,0.1)
        border_choic.lineColor = [1,1,0]
        border_choic.fillColor = None
        if key_resp_self.keys == -1:

        #    border_choic.color = [1,1,0]
        #    border_choic.fillcolor = False
            border_choic.pos = (0.3,-0.3)

        elif key_resp_self.keys == 1:
            key_resp_self.keys = 1
        #    border_choic.color = [0,1,0]
        #    border_choic.fillcolor = False
            border_choic.pos = (-0.3,-0.3)
        else:
            pass
        border_choic.setAutoDraw(True)
      End Routine:
        pie.setAutoDraw(False)
        pie_2.setAutoDraw(False)
        random_text_accept.setAutoDraw(False)
        #random_text_reject.setAutoDraw(False)
        border_choic.setAutoDraw(False)
        background_rect.setAutoDraw(False)
    KeyboardComponent key_resp_confirm
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent accept_button_confirm
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Accept
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    TextComponent reject_button_confirm
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Reject
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  Routine inst_sess_5
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    TextComponent sess_1_ex
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Session 5: Self Trials
        The session is identical to Sessions 1 and 3 with participants making choices for themselves.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine inst_sess_5
  LoopInitiator Sess_1 loopType="TrialHandler"
    loopType = random
    nReps = 28
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    Routine polygan_self
    Routine self_1
    Routine confirmation
  LoopTerminator Sess_1
